PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = data_collection
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine adjustment
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    EmotivRecordingComponent cortex_rec plugin="psychopy-emotiv"
      disabled = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Adjustment Period
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  Routine wordDisplay
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    CodeComponent promptLogic
      Code Type = Py
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      Begin Experiment:
        import random
        from pynput.keyboard import Controller, Key
        import time
        import json

        trial_dir = "C:\\Users\\User\\Desktop\\AI Work\\Year 3\\FYP\\FYP-Procedure\\psychopy\\prompt times"
        num_files = len([f for f in os.listdir(trial_dir) if os.path.isfile(os.path.join(trial_dir, f))])
        file_name = f"trial_{num_files+1}.txt"
        file_path = os.path.join(trial_dir, file_name)

        prompt_times = {}

        initialised = False

        keyboard = Controller()
      Begin Routine:
        if not initialised:
            words = [{'word': row['word'], 'marker': row['marker'], 'keybind': row['keybind']} for row in wordPromptLoop.trialList]
            unseen_words = words.copy()
            random.shuffle(unseen_words)
            initialised = True

        if unseen_words:
            current_word = unseen_words.pop()
            word = current_word['word']
            marker = current_word['marker']
            prompt_times[word] = time.time()
            keybind = current_word['keybind']
            keyboard.press(keybind)
            keyboard.release(keybind)
        else:
            with open(file_path, "w") as f:
                json.dump(prompt_times, f)
            core.quit()  # End experiment once all words are seen
      End Experiment:
        with open(file_path, "w") as f:
                json.dump(prompt_times, f, indent=4)
    EmotivMarkingComponent eeg_marker plugin="psychopy-emotiv"
      disabled = True
      durationEstim = 0.01
      emotiv_marker_label [set every repeat] = $word
      emotiv_marker_value [set every repeat] = $marker
      emotiv_stop_marker = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
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    TextComponent wordDisplayText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $word
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  Routine fixation
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    TextComponent fixationCross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 36
      text = +
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  Routine rest
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    ImageComponent placeholder_image
      image = blank.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 8
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  Routine codeRoutine
    RoutineSettingsComponent codeRoutine
      stopVal [duration (s)] = 0.01
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    CodeComponent codeComponent
      Code Type = Py
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      Begin Experiment:
        import random
        from pynput.keyboard import Controller, Key

        initialised = False
      Begin Routine:
        if not initialised:
            words = [{'word': row['word'], 'marker': row['marker']} for row in wordPromptLoop.trialList]
            unseen_words = words.copy()
            random.shuffle(unseen_words)
            keyboard = Controller()
            initialised = True

        if unseen_words:
            current_word = unseen_words.pop()
            word = current_word['word']
            marker = current_word['marker']
            keyboard.press('a')
            keyboard.release('a')
        else:
            core.quit()  # End experiment once all words are seen
  Routine shortFixation
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    TextComponent fixationCross_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = x
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Flow
  Routine adjustment
  LoopInitiator wordPromptLoop loopType="TrialHandler"
    conditionsFile = words.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'I'), ('marker', 1), ('keybind', 'a')]),
      OrderedDict([('word', 'More'), ('marker', 2), ('keybind', 'b')]),
      OrderedDict([('word', 'What'), ('marker', 3), ('keybind', 'c')]),
      OrderedDict([('word', 'Who'), ('marker', 4), ('keybind', 'd')]),
      OrderedDict([('word', 'Help'), ('marker', 5), ('keybind', 'e')]),
      OrderedDict([('word', 'You'), ('marker', 6), ('keybind', 'f')]),
      OrderedDict([('word', 'Want'), ('marker', 7), ('keybind', 'g')]),
      OrderedDict([('word', 'When'), ('marker', 8), ('keybind', 'h')]),
      OrderedDict([('word', 'On'), ('marker', 9), ('keybind', 'i')]),
      OrderedDict([('word', 'Stop'), ('marker', 10), ('keybind', 'j')]),
      OrderedDict([('word', 'Yes'), ('marker', 11), ('keybind', 'k')]),
      OrderedDict([('word', 'Do'), ('marker', 12), ('keybind', 'l')]),
      OrderedDict([('word', 'Where'), ('marker', 13), ('keybind', 'm')]),
      OrderedDict([('word', 'In'), ('marker', 14), ('keybind', 'n')]),
      OrderedDict([('word', 'Give'), ('marker', 15), ('keybind', 'o')]),
      OrderedDict([('word', 'No'), ('marker', 16), ('keybind', 'p')]),
      OrderedDict([('word', 'Put'), ('marker', 17), ('keybind', 'q')]),
      OrderedDict([('word', 'Why'), ('marker', 18), ('keybind', 'r')]),
      OrderedDict([('word', 'Get'), ('marker', 19), ('keybind', 's')]),
      OrderedDict([('word', 'Come'), ('marker', 20), ('keybind', 't')])]
    Routine shortFixation
    Routine wordDisplay
    Routine fixation
    Routine rest
  LoopTerminator wordPromptLoop
