PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1536, 864]
  expName = trial
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine adjustment
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Ajustment Period
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  Routine wordDisplay
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    CodeComponent promptLogic
      Code Type = Py
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      Begin Experiment:
        import random

        initialised = False
      Begin Routine:
        if not initialised:
            words = [{'word': row['word'], 'marker': row['marker']} for row in wordPromptLoop.trialList]
            unseen_words = words.copy()
            random.shuffle(unseen_words)
            initialised = True

        if unseen_words:
            current_word = unseen_words.pop()
            word = current_word['word']
            marker = current_word['marker']
        else:
            core.quit()  # End experiment once all words are seen
    TextComponent wordDisplayText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $word
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  Routine fixation
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    TextComponent fixationCross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = +
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  Routine rest
    RoutineSettingsComponent rest
      stopVal [duration (s)] = 5
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  Routine codeRoutine
    RoutineSettingsComponent codeRoutine
      stopVal [duration (s)] = 0.01
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    CodeComponent codeComponent
      Code Type = Py
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      Begin Experiment:
        import random
        from pynput.keyboard import Controller, Key

        initialised = False
      Begin Routine:
        if not initialised:
            words = [{'word': row['word'], 'marker': row['marker']} for row in wordPromptLoop.trialList]
            unseen_words = words.copy()
            random.shuffle(unseen_words)
            keyboard = Controller()
            initialised = True

        if unseen_words:
            current_word = unseen_words.pop()
            word = current_word['word']
            marker = current_word['marker']
            keyboard.press('a')
            keyboard.release('a')
        else:
            core.quit()  # End experiment once all words are seen
Flow
  Routine adjustment
  LoopInitiator wordPromptLoop loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = words.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'I'), ('marker', 1)]),
      OrderedDict([('word', 'More'), ('marker', 2)]),
      OrderedDict([('word', 'What'), ('marker', 3)]),
      OrderedDict([('word', 'Who'), ('marker', 4)]),
      OrderedDict([('word', 'Help'), ('marker', 5)]),
      OrderedDict([('word', 'You'), ('marker', 6)]),
      OrderedDict([('word', 'Want'), ('marker', 7)]),
      OrderedDict([('word', 'When'), ('marker', 8)]),
      OrderedDict([('word', 'On'), ('marker', 9)]),
      OrderedDict([('word', 'Stop'), ('marker', 10)]),
      OrderedDict([('word', 'Yes'), ('marker', 11)]),
      OrderedDict([('word', 'Do'), ('marker', 12)]),
      OrderedDict([('word', 'Where'), ('marker', 13)]),
      OrderedDict([('word', 'In'), ('marker', 14)]),
      OrderedDict([('word', 'Give'), ('marker', 15)]),
      OrderedDict([('word', 'No'), ('marker', 16)]),
      OrderedDict([('word', 'Put'), ('marker', 17)]),
      OrderedDict([('word', 'Why'), ('marker', 18)]),
      OrderedDict([('word', 'Get'), ('marker', 19)]),
      OrderedDict([('word', 'Come'), ('marker', 20)])]
    Routine wordDisplay
    Routine fixation
    Routine rest
  LoopTerminator wordPromptLoop
